//--------------------------------------------------------------------------------------------
// Run a countermanding trial based on the variables calculated by SETC_TRL.pro and those 
// given by the user.
//
// written by david.c.godlove@vanderbilt.edu 	January, 2011
declare hide int StimTm;									// Should we stim on this trial?

declare hide int Trl_Outcome;			// Global output used in END_TRL
declare hide int Trl_Start_Time;		// Global output used in END_TRL
declare hide int LastStopOutcome = 1;	// Global output used to staircase SSD
declare hide int nogosoa;
declare hide int sacctarg;
declare hide int ReactionTime;

declare MGTRIAL(allowed_fix_time,		// see ALL_VARS.pro and DEFAULT.pro
				curr_holdtime, 			// see SETC_TRL.pro
				trl_type, 				// see SETC_TRL.pro
				max_saccade_time, 		// see ALL_VARS.pro and DEFAULT.pro
				curr_soa, 				// see SETC_TRL.pro
				cancl_time,				// see ALL_VARS.pro and DEFAULT.pro
				max_sacc_duration, 		// see ALL_VARS.pro and DEFAULT.pro
				targ_hold_time,			// see ALL_VARS.pro and DEFAULT.pro
				object_fix);			// animated graph object

process MGTRIAL(allowed_fix_time, 		// see ALL_VARS.pro and DEFAULT.pro
				curr_holdtime,     		// see SETC_TRL.pro
				trl_type,          		// see SETC_TRL.pro
				max_saccade_time,  		// see ALL_VARS.pro and DEFAULT.pro
				curr_soa,          		// see SETC_TRL.pro
				cancl_time,        		// see ALL_VARS.pro and DEFAULT.pro
				max_sacc_duration, 		// see ALL_VARS.pro and DEFAULT.pro
				targ_hold_time,    		// see ALL_VARS.pro and DEFAULT.pro
				object_fix)        		// animated graph object
	{
	
	// Number the trial types to make them easier to read below
	declare hide int 	go_trl 		= 0;
	declare hide int 	stop_trl 	= 1;
	declare hide int 	ignore_trl 	= 2;
	
	// Number the trial stages to make them easier to read below
	declare hide int 	need_fix  	= 1;
	declare hide int 	fixating  	= 2;
	declare hide int 	targ_off	= 3;
	declare hide int 	targ_on   	= 4;
	declare hide int	fix_off		= 5;
	declare hide int 	in_flight 	= 6;
	declare hide int 	on_target 	= 7;
	declare hide int 	fix_break_test	= 8;
	declare hide int 	stage;
	
	// Number the stimuli pages to make reading easier
	declare hide int   	blank       = 0;
	declare hide int	fixation_pd = 1;
	declare hide int	fixation    = 2;
	declare hide int	target_pd   = 3;
	declare hide int	target      = 4;
	declare hide int	signal_pd   = 5;
	declare hide int	signal      = 6;

	// Assign values to success and failure so they are more readable
	declare hide int	success		= 1;
	declare hide int	failure		= 0;
	declare hide int	no_change	= 2;
	
	// Code all possible outcomes
	declare hide int constant no_fix		= 1;	// never attained fixation
	declare hide int constant broke_fix		= 2;	// attained and then lost fixation before target presentation
	declare hide int constant go_wrong		= 3;	// never made saccade on a go trial
	declare hide int constant nogo_correct	= 4;	// successfully canceled trial
	declare hide int constant sacc_out		= 5;	// made an inaccurate saccade out of the target box
	declare hide int constant broke_targ	= 6;	// didn't hold fixation at the target for long enough
	declare hide int constant go_correct	= 7;	// correct saccade on a go trial
	declare hide int constant nogo_wrong	= 8;	// error noncanceled trial
	declare hide int constant body_move		= 12;	// error body movement (for training stillness)
	declare hide int constant too_fast		= 14;	// low RT while in training to slow down.
	declare hide int constant early_sacc	= 9;	// made a saccade before fixation offset												
	declare hide int constant no_sacc		= 10;	// didn't make a saccade after cued to do so
	declare hide int constant correct_sacc	= 11;	// correct saccade after cue
	
	// Timing variables which will be used to time task
	declare hide float 	fix_spot_time; 					
	declare hide float  targ_time; 					
	declare hide float  saccade_time;
	declare hide float 	aquire_fix_time;
	declare hide float 	stop_sig_time;
	declare hide float	aquire_targ_time;	
	declare hide float	fix_off_time;
	declare hide float fix_break_time;
	
	
	// This variable makes the while loop work
	declare hide int 	trl_running;
	
	// Stim complete?
	declare hide int 	StimDone;
	StimDone = 0;
	
	
	// Have to be reset on every iteration since 
	// variable declaration only occurs at load time
	trl_running 		= 1;
	stage 				= need_fix;
	
	// Tell the user what's up
	printf(" \n");
	printf("# %d",Trl_number);
	printf(" (%d",Comp_Trl_number);
	printf(" correct)\n");
	printf("holdtime = %d\n",curr_holdtime);
	printf("soa = %d\n",curr_soa);


	Event_fifo[Set_event] = MemHeader_;									// queue TrialStart_ strobe
	Set_event = (Set_event + 1) % Event_fifo_N;			
																			// HERE IS WHERE THE FUN BEGINS
	Event_fifo[Set_event] = TrialStart_;									// queue TrialStart_ strobe
	Set_event = (Set_event + 1) % Event_fifo_N;								// incriment event queue
	dsendf("vp %d\n",fixation_pd);											// flip the pg to the fixation stim with pd marker
	while (!pdIsOn)
	{
		nexttick;
	}
	
	fix_spot_time = time();  												// record the time
	Event_fifo[Set_event] = FixSpotOn_;										// queue strobe
	Set_event = (Set_event + 1) % Event_fifo_N;								// incriment event queue
	//dsendf("XM RFRSH:\n"); 													// wait one vertical retrace
	dsendf("vp %d\n",fixation);												// flip the pg to the fixation stim without pd marker
	oSetAttribute(object_fix, aVISIBLE); 									// turn on the fixation point in animated graph
	
	
	while (trl_running)														// trials ending will set trl_running = 0
		{	
		
	//--------------------------------------------------------------------------------------------
	// STAGE need_fix (the fixation point is on, but the subject hasn't looked at it)
		if (stage == need_fix)
			{		
			if (In_FixWin)													// If the eyes have entered the fixation window (before time, see below)...
				{
				aquire_fix_time = time();									// ...function call to time to note current time and...
				Trl_Start_Time = aquire_fix_time;							// Global output
				Event_fifo[Set_event] = Fixate_;							// ...queue strobe...
				Set_event = (Set_event + 1) % Event_fifo_N;					// ...incriment event queue...
				stage = fixating;											// ...advance to the next stage.
				}
			else if (time() > fix_spot_time + allowed_fix_time)				// But if time runs out...
				{
				Trl_Outcome = no_fix;    									// TRIAL OUTCOME ERROR (no fixation)
				LastStopOutcome = no_change;								// Don't change SSD
				dsendf("vp %d\n",blank);									// Flip the pg to the blank screen,...
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				printf("Aborted (no fixation)\n");							// ...tell the user whats up...
				trl_running = 0;											// ...and terminate the trial.
				}			
			}
			
		else if (stage == fix_break_test)
			{
				if (!In_FixWin && time() > fix_break_time + fix_tolerance)
				{
					Trl_Outcome = broke_fix;									// TRIAL OUTCOME ERROR (broke fixation)
					LastStopOutcome = no_change;								// Don't change SSD
					dsendf("vp %d\n",blank);									// Flip the pg to the blank screen...
					oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
					oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
					printf("Aborted (broke fixation)\n");						// ...tell the user whats up...
					trl_running = 0;											// ...and terminate the trial.
				} else if (In_FixWin)
				{
					stage = fixating;
					aquire_fix_time = time();
				}
			}	

	//--------------------------------------------------------------------------------------------
	// STAGE fixating (the subject is looking at the fixation point waiting for target onset)		
		else if (stage == fixating)
			{
			if (!In_FixWin)													// If the eyes stray out of the fixation window...
				{
				fix_break_time = time();
				stage = fix_break_test;
				/*
				Trl_Outcome = broke_fix;									// TRIAL OUTCOME ERROR (broke fixation)
				LastStopOutcome = no_change;								// Don't change SSD
				dsendf("vp %d\n",blank);									// Flip the pg to the blank screen...
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				printf("Aborted (broke fixation)\n");						// ...tell the user whats up...
				trl_running = 0;											// ...and terminate the trial.
				*/
				}
				
				
//////////////////////////// peri-event stimulation code /////////////////////////////////////////////			
				
			else if (StimTm == 1 && In_FixWin && StimDone == 0 && time() > aquire_fix_time + (curr_holdtime - 140)) //stimulate 150ms before target onset
				{		
						spawn STIM(stim_channel);
						StimDone = 1;
				}

			else if (StimTm == 2 && In_FixWin && StimDone == 0 && time() > aquire_fix_time + (curr_holdtime - 40)) //stimulate 150ms before target onset
				{		
						spawn STIM(stim_channel);
						StimDone = 1;
						
				}
//////////////////////////// peri-event stimulation code /////////////////////////////////////////////			
				
			else if (In_FixWin && time() > aquire_fix_time + curr_holdtime)	// But if the eyes are still in the window at end of holdtime...
				{
				//dsendf("XM RFRSH:\n"); 										// ...wait one vetical retrace...
				dsendf("vp %d\n",target_pd);								// ...flip the pg to the target with pd marker...	
				while (pdIsOn == 0)
				{
					//printf("Checking PD Target...\n");
					if (!In_FixWin)
					{
						fix_break_time = time();
						stage = fix_break_test;
					}
					nexttick;
				}
				
				targ_time = time(); 										// ...record the time...
				Event_fifo[Set_event] = Target_;						// Queue strobe...
				Set_event = (Set_event + 1) % Event_fifo_N;
				//dsendf("XM RFRSH:\n"); 										// ...wait one vetical retrace...
				dsendf("vp %d\n",target);	
				//dsendf("vp %d\n",fixation);									// ...flip the pg to the target without pd marker.
				
//				if (trl_type == stop_trl ||									// If it is a stop or ignore trial present the signal.
//				trl_type == ignore_trl)										// This happens here so that no overhead intervenes between commands.
//					{														// That way the # of vertical retraces remains independant of incidental processing time.
//																			// (Even so, sometimes we will accidentally wait n+1 retraces. Such is vdosync.)
//					dsendf("vw %d\n",curr_ssd-1);							// Wait so many vertical retraces (one is waited implicitly b/c photodiode marker above)...
//					dsendf("vp %d\n",signal_pd);							// ...flip the pg to the signal with the pd marker...
//					stop_sig_time = targ_time + 
//						(round(curr_ssd * (1000.0 / Refresh_rate))); 		// ...record TEMPO time of presentation...
//					dsendf("XM RFRSH:\n"); 									// ...wait 1 vertical retrace...
//					dsendf("vp %d\n",signal);								// ...and flip the pg to the signal without pd marker.
//					}
//					
//				Event_fifo[Set_event] = FixSpotOff_;						// Queue strobe...
//				Set_event = (Set_event + 1) % Event_fifo_N;					// ...incriment event queue...
				
																			// Now the animated graphs have to catch up (seperate so that stim timing stays tight)
//				if (trl_type == go_trl)										// If the trial is a go trial...
//					{
//					oSetAttribute(object_targ, aVISIBLE); 					// ...show target in animated graph...
//					oSetAttribute(object_fix, aINVISIBLE); 					// ...remove fixation point from animated graph.
//					}
//				else if (trl_type == ignore_trl)							// But if the trial is an ignore trial
//					{
//					oSetAttribute(object_targ, aVISIBLE); 					// ...just show target in animated graph (fixation point stays on).
//					}														// If it is a stop trial the target just never comes up in the animated graph.
				sacctarg = 1;
				oSetAttribute(object_targ, aVISIBLE); 						// ...show target in animated graph...	
				stage = targ_off;											// Advance to the next trial stage.				
				}
			}
			
		else if (stage == targ_off)
			{
			if (!In_FixWin)
				{
//				printf("                          soa = %d\n",round(curr_soa * (1000.0/Refresh_rate)));
				printf("                          premature rt = %d\n",time() - targ_time);
				Trl_Outcome = early_sacc;									// TRIAL OUTCOME ERROR (sacc before cued to do so)
				LastStopOutcome = no_change;
				dsendf("vp %d\n",blank);
				dsendf("vp %d\n",blank);								// Flip the pg to the blank screen...
				Event_fifo[Set_event] = EarlySaccade_;							// ...queue strobe...
				Event_fifo[Set_event] = EarlySaccade_;							// ...queue strobe...
				Set_event = (Set_event + 1) % Event_fifo_N;				
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				printf("Error (early saccade)\n");							// ...tell the user whats up...
				sacctarg = 0;
				trl_running = 0;											// ...and terminate the trial.
				}
			else if (In_FixWin && time() > targ_time+targ_on_time)
				{
				dsendf("vp %d\n",fixation);									// ...flip the pg to the target without pd marker.
				Event_fifo[Set_event] = TargetOff_;
				Set_event = (Set_event + 1) % Event_fifo_N;
				stage = targ_on;
				}
			}

	//--------------------------------------------------------------------------------------------
	// STAGE targ_on (the target has been presented but the subject is still fixating)		
		else if (stage == targ_on)
			{		
			if (!In_FixWin)													// If the eyes leave the fixation window...
				{
//				printf("                          soa = %d\n",round(curr_soa * (1000.0/Refresh_rate)));
				printf("                          premature rt = %d\n",time() - targ_time);
				Trl_Outcome = early_sacc;									// TRIAL OUTCOME ERROR (sacc before cued to do so)
				LastStopOutcome = no_change;
				dsendf("vp %d\n",blank);
				//dsendf("vp %d\n",blank);								// Flip the pg to the blank screen...
				Event_fifo[Set_event] = EarlySaccade_;							// ...queue strobe...
				//Event_fifo[Set_event] = EarlySaccade_;							// ...queue strobe...
				Set_event = (Set_event + 1) % Event_fifo_N;				
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				printf("Error (early saccade)\n");							// ...tell the user whats up...
				sacctarg = 0;
				trl_running = 0;											// ...and terminate the trial.
				}
//////////////////////////// peri-event stimulation code /////////////////////////////////////////////			
				
			else if (StimTm == 3 && In_FixWin && StimDone == 0 && time() > targ_time + (curr_soa - 140)) //stimulate 150ms before target onset
				{		
						spawn STIM(stim_channel);
						StimDone = 1;
				}

			else if (StimTm == 4 && In_FixWin && StimDone == 0 && time() > targ_time + (curr_soa - 40)) //stimulate 150ms before target onset
				{		
						spawn STIM(stim_channel);
						StimDone = 1;
						
				}
//////////////////////////// peri-event stimulation code /////////////////////////////////////////////		
				
			else if (In_FixWin &&  											// But if no saccade occurs...
				time() > targ_time + curr_soa)	 							// ...and the stim onset asychrony passes...
				{
//				printf("                          soa = %d\n",round(curr_soa * (1000.0/Refresh_rate)));
				
				if (trl_type == stop_trl ||									// If it is a stop or ignore trial present the signal.
				trl_type == ignore_trl)										// This happens here so that no overhead intervenes between commands.
				{

					dsendf("vp %d\n",signal_pd);										// Flip the pg to the blank screen with the photodiode marker...
					while (!pdIsOn)
					{
						if (!In_FixWin)
						{
							fix_break_time = time();
							stage = fix_break_test;
						}
						nexttick;
					
					}
					
					fix_off_time = time();										// ...and record the time that the fixation point was extinguished.
					Event_fifo[Set_event] = FixSpotOff_;						// Queue strobe...
					Set_event = (Set_event + 1) % Event_fifo_N;					// ...incriment event queue...
					//dsendf("XM RFRSH:\n"); 										// ...wait for one retrace cycle...
					dsendf("vp %d\n",signal);									// ...flip the pg to the blank screen without pd marker.
					oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
					stage = fix_off;
					
				}
				else if (trl_type == go_trl)
				{

					dsendf("vp %d\n",signal_pd);										// Flip the pg to the blank screen with the photodiode marker...
					
					while (!pdIsOn)
					{
						if (!In_FixWin)
						{
							fix_break_time = time();
							stage = fix_break_test;
						}
						nexttick;
					}
					
					fix_off_time = time();										// ...and record the time that the fixation point was extinguished.
					Event_fifo[Set_event] = FixSpotOff_;						// Queue strobe...
					Set_event = (Set_event + 1) % Event_fifo_N;					// ...incriment event queue...
					//dsendf("XM RFRSH:\n"); 										// ...wait for one retrace cycle...
//					dsendf("vp %d\n",blank);									// ...flip the pg to the blank screen without pd marker.
					dsendf("vp %d\n",signal);
					oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
					stage = fix_off;											// ...and advance to the next stage.
				}
				}
			
			// else if (In_FixWin &&  											// But if no saccade occurs...
				// time() > targ_time + max_saccade_time && 					// ...and time for a saccade runs out...
				// trl_type == go_trl)				// ...and a saccade was supposed to be made.
				// {
				// Trl_Outcome = go_wrong;           							// TRIAL OUTCOME ERROR (incorrect go trial)
				// LastStopOutcome = no_change;								// Don't change SSD
				// dsendf("vp %d\n",blank);									// Flip the pg to the blank screen...
				// oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				// oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				// printf("Error (no saccade)\n");								// ...tell the user whats up...
				// spawn SVR_BELL();
				// trl_running = 0;											// ...and terminate the trial.
				// }				
//			else if (In_FixWin &&											// But if no saccade occurs...
//				time() > targ_time + curr_ssd + cancl_time && 				// ...and time for a saccade runs out...
//				trl_type == stop_trl)										// ...and a saccade was NOT supposed to be made...
//				{
//				Trl_Outcome = nogo_correct;   								// TRIAL OUTCOME CORRECT (canceled trial)
//				LastStopOutcome = success;									// set the global for staircasing...
//				Correct_trls = Correct_trls + 1;							// ...set a global for 1DR...
//				dsendf("vp %d\n",blank);									// ...flip the pg to the blank screen...
//				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
//				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
//				Event_fifo[Set_event] = Correct_;							// ...queue strobe...
//				Set_event = (Set_event + 1) % Event_fifo_N;					// ...incriment event queue...
//				printf("Correct (canceled)\n");								// ...tell the user whats up...
//				if (Canc_alert)
//					{
//					spawn SVR_BEL2();										// for training purposes
//					}
//				trl_running = 0;  											// ...and terminate the trial.
//				}		
			}
			
		else if (stage == fix_off)
			{
			
			////////////////////////////////////////////////////////////////////////////////////////

			if (!In_FixWin && (trl_type == go_trl))													// If the eyes leave the fixation window...			
				{
				saccade_time = time();										// ...record the time...
				// ...we have a saccade, so...
				if (70 > saccade_time - fix_off_time)
				{
				printf("                   visual_premature rt = %d\n",time() - targ_time);
				Trl_Outcome = early_sacc;									// TRIAL OUTCOME ERROR (sacc before cued to do so)
				LastStopOutcome = no_change;
				dsendf("vp %d\n",blank);
				//dsendf("vp %d\n",blank);								// Flip the pg to the blank screen...
				Event_fifo[Set_event] = EarlySaccade_;							// ...queue strobe...				
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				printf("Error (early saccade)\n");							// ...tell the user whats up...
				sacctarg = 0;
				trl_running = 0;											// ...and terminate the trial.
				}
				else if (150 < (saccade_time - fix_off_time))
				{
				Event_fifo[Set_event] = Saccade_;							// ...queue strobe...
				Set_event = (Set_event + 1) % Event_fifo_N;					// ...incriment event queue...
				ReactionTime = saccade_time - fix_off_time;
				printf("                        visual rt = %d\n",ReactionTime);	// ...tell the user whats up...
				stage = in_flight;											// ...and advance to the next stage.
				}
						// ...and terminate the trial.
			}
			else if (In_FixWin &&  											// But if no saccade occurs...
				(time() > fix_off_time + max_saccade_time)&& (trl_type == go_trl)) 					// ...and time for a saccade runs out...
				{
				Trl_Outcome = no_sacc;           							// TRIAL OUTCOME ERROR (no saccade after cue)
				LastStopOutcome = no_change;
				dsendf("vp %d\n",blank);									// Flip the pg to the blank screen...
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				printf("Error (no saccade)\n");								// ...tell the user whats up...
				sacctarg = 0;
				trl_running = 0;											// ...and terminate the trial.
				}	
			else if (In_FixWin &&  											// But if no saccade occurs...
				time() > fix_off_time + cancl_time && trl_type == stop_trl) 					// ...and time for a saccade runs out...
				{
				Trl_Outcome = nogo_correct;           							// TRIAL OUTCOME ERROR (no saccade after cue)
				LastStopOutcome = no_change;
				dsendf("vp %d\n",blank);									// ...flip the pg to the blank screen...
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				Event_fifo[Set_event] = Correct_;							// ...queue strobe...
				Set_event = (Set_event + 1) % Event_fifo_N;					// ...incriment event queue...
				printf("Correct (canceled)\n");								// ...tell the user whats up...
				if (Canc_alert)
					{
					spawn SVR_BEL2();										// for training purposes
					}
				sacctarg = 0;
				trl_running = 0;  											// ...and terminate the trial.
				}													// ...and terminate the trial.
			else if (!In_FixWin &&  											// But if no saccade occurs...
				time() < fix_off_time + cancl_time && trl_type == stop_trl) 					// ...and time for a saccade runs out...
				{
				Trl_Outcome = nogo_wrong;								//TRIAL OUTCOME ERROR (noncanceled trial)
				LastStopOutcome = no_change;
				printf("Error (noncanceled)\n");						// ...tell the user whats up...
				dsendf("vp %d\n",blank);									// ...flip the pg to the blank screen...
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				sacctarg = 0;
				trl_running = 0;											// ...and terminate the trial.
				}	
			}			
			
	//--------------------------------------------------------------------------------------------
	// STAGE in_flight (eyes have left fixation window but have not entered target window)		
		else if (stage == in_flight)
			{
			if (In_TargWin)													// If the eyes get into the target window...
				{
				
//				dsendf("XM RFRSH:\n");
				aquire_targ_time = time(); 									// ...record the time...
				Event_fifo[Set_event] = Decide_;							// ...queue strobe...
				Set_event = (Set_event + 1) % Event_fifo_N;					// ...incriment event queue...
				dsendf("vp %d\n",target_pd);								// ...flip the pg to the target with pd marker...	
				
				
				while (!pdIsOn && trl_running)
				{
					if (!In_TargWin && trl_running)
					{
						Trl_Outcome = broke_targ;									// TRIAL OUTCOME ERROR (broke target fixation)
						LastStopOutcome = no_change;
						dsendf("vp %d\n",blank);
						Event_fifo[Set_event] = BreakTFix_;					// ...queue strobe for Neuro Explorer
						Set_event = (Set_event + 1) % Event_fifo_N;				// ...incriment event queue.				
						oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
						oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
						printf("Error (broke target fixation)\n");					// ...tell the user whats up...
						sacctarg = 0;
						trl_running = 0;											// ...and terminate the trial.
						
					}
					nexttick;
				}
				
				sacctarg = 0;
				dsendf("XM RFRSH:\n"); 										// ...wait for one retrace cycle...
				dsendf("vp %d\n",target);									// ...flip the pg to the target without pd marker.
				stage = on_target;											// ...and advance to the next stage of the trial.
				}
			else if (time() > saccade_time + max_sacc_duration)				// But, if the eyes are out of the target window and time runs out...
				{
				Trl_Outcome = sacc_out;   									// TRIAL OUTCOME ERROR (innacurrate saccade)
				LastStopOutcome = no_change;
				dsendf("vp %d\n",blank);									// Flip the pg to the blank screen...
				Event_fifo[Set_event] = Error_sacc;					// ...queue strobe for Neuro Explorer
				Set_event = (Set_event + 1) % Event_fifo_N;				// ...incriment event queue.
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				printf("Error (inaccurate saccade)\n");						// ...tell the user whats up...
				sacctarg = 0;
				trl_running = 0; 											// ...and terminate the trial.
				}
			}
		
		
		
	//--------------------------------------------------------------------------------------------
	// STAGE on_target (eyes have entered the target window.  will they remain there for duration?)	
		else if (stage == on_target)
			{
			if (!In_TargWin)												// If the eyes left the target window...
				{			
				Trl_Outcome = broke_targ;									// TRIAL OUTCOME ERROR (broke target fixation)
				LastStopOutcome = no_change;
				dsendf("vp %d\n",blank);
				Event_fifo[Set_event] = BreakTFix_;					// ...queue strobe for Neuro Explorer
				Set_event = (Set_event + 1) % Event_fifo_N;				// ...incriment event queue.				
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				printf("Error (broke target fixation)\n");					// ...tell the user whats up...
				sacctarg = 0;
				trl_running = 0;											// ...and terminate the trial.
				}		
			else if (In_TargWin  											// But if the eyes are still in the target window...
				&&  time() > aquire_targ_time + targ_hold_time)				// ...and the target hold time is up...				
				{
				Trl_Outcome = correct_sacc;									//TRIAL OUTCOME CORRECT (correct sacc trial)
				LastStopOutcome = success;
				Event_fifo[Set_event] = Correct_;							// ...queue strobe...
				Set_event = (Set_event + 1) % Event_fifo_N;					// ...incriment event queue...
				printf("Correct (saccade)\n");								// ...tell the user whats up...
				dsendf("vp %d\n",blank);									// ...flip the pg to the blank screen...
				oSetAttribute(object_targ, aINVISIBLE); 					// ...remove target from animated graph...
				oSetAttribute(object_fix, aINVISIBLE); 						// ...remove fixation point from animated graph...
				sacctarg = 0;
				trl_running = 0;											// ...and terminate the trial.
				}			
			}
			
		nexttick;
		}
			
		if (Move_ct > 0)
			{
			Trl_Outcome = body_move;   										// TRIAL OUTCOME ABORTED (the body was moving)
			LastStopOutcome = no_change;									// ...make sure that the last outcome is cleared.	
			dsendf("vp %d\n",blank);										// Flip the pg to the blank screen...
			oSetAttribute(object_targ, aINVISIBLE); 						// ...remove target from animated graph...
			oSetAttribute(object_fix, aINVISIBLE); 							// ...remove fixation point from animated graph...
			printf("Aborted (body movement)\n");							// ...tell the user whats up...
			sacctarg = 0;
			trl_running = 0; 												// ...and terminate the trial.
			}	
			
		nexttick;
		}
	